<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dlc="clr-namespace:Bonsai.DeepLabCut;assembly=Bonsai.DeepLabCut"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>C:\Users\Regis\Documents\Behavior videos\022_Ant Challenge\logitec_NDNF_F_0172_2024-04-30_1_VIDEO.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>false</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dlc:PredictPose">
          <dlc:ModelFileName>C:\Users\Regis\Documents\DLC models\SuperMouse-Regis-2023-06-14\exported-models\DLC_SuperMouse_resnet_50_iteration-3_shuffle-1\snapshot-300000.pb</dlc:ModelFileName>
          <dlc:PoseConfigFileName>C:\Users\Regis\Documents\DLC models\SuperMouse-Regis-2023-06-14\exported-models\DLC_SuperMouse_resnet_50_iteration-3_shuffle-1\pose_cfg.yaml</dlc:PoseConfigFileName>
          <dlc:MinConfidence>0.8</dlc:MinConfidence>
          <dlc:ScaleFactor xsi:nil="true" />
          <dlc:ColorConversion>Bgr2Rgb</dlc:ColorConversion>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
