<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>test.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT5S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>cricket_.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>120</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="2" To="9" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="7" To="11" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
